// ======================================================================
//    2025-08-22  HenrikUbb   :  Slight refactoring
// ======================================================================

#ifndef __HSLBarcodeReaderLib_hsl__
#define __HSLBarcodeReaderLib_hsl__	1

// Comment out following line, when HSL library is ok (to speed up method editor)
//#define FIL_DEVELOP		1

#ifdef FIL_DEVELOP
	#ifndef HSL_RUNTIME
	#define HSL_RUNTIME			1
	#endif
#endif

// ==========================================================================
// Implementation of File library
// ==========================================================================
#ifdef HSL_RUNTIME
#pragma once
#include "HSLBarcodeReader.hs_"
#endif //end of #ifdef HSL_RUNTIME

// Interface to File library
#ifndef HSL_RUNTIME
namespace HSLBarcodeReader
{
	function SetSimulation(variable simulate) variable { return (0); }

	function SetTimeout(variable timeout) variable { return (0); }

	function DelComBuffer() void {}

	function Read() variable { return (""); }

	function SetComPort(variable& comPort) variable { return (0); }

	function SetErrorRecovery(variable errRecovery) variable { return (0); }

} // end of namespace HSLBarcodeReader

#endif
#endif // end of #ifndef __HSLBarcodeReaderLib_hsl__
