//------------------------------------------------------------------------------------
// This is a part of the GCC Microlab® STAR Step Library (aka Microlab® STAR Smart Steps).
//
// Modification History
//------------------------------------------------------------------------------------
#ifndef __HSLGCCMlStarStepLibImpl_hsl__
#define __HSLGCCMlStarStepLibImpl_hsl__	1

#pragma once
#include "Steps/SmartStepCustomizedErrorHandling\SmartStepCustomErrorHandling.hs_"
#include "HSLStrLib/HSLStrLib.hsl"

namespace MlStarSteps
{
	//#define _DEBUG_STEPPARAMS		1			// traces all the parameters passed to the Star-Steps...
}

namespace MlStarSteps
{
	#ifdef _DEBUG_STEPPARAMS
	namespace DEBUG
	{
		// Helper function, returns the variable converted to a string
		static function StrStr(variable& var) variable
		{
			variable type;
			type = GetType(var);
			if (hslInteger.Compare(type) == 0)
			{
				var = IStr(var);
			}
			else
			{
				if (hslFloat.Compare(type) == 0)
				{
					var = FStr(var);
				}
				else
				{
					if (hslString.Compare(type) != 0)
					{
						var = "";
					}
				}
			}
			return(var);
		}

		static function TraceStepParamVariable(variable& stepName, variable& key, variable& value) void
		{
			FormatTrace("DEBUG", stepName, 4, key, ": ", value);
		}

		static function TraceStepParamVariableArray(variable& stepName, variable& key, variable& value[]) void
		{
			variable values;
			variable index, count;
			count = value.GetSize();
			FormatTrace("DEBUG", stepName, 4, key, "[] Size: ", count);
			values = "";
			for(index=0; index<count; index++)
			{
				values = values + DEBUG::StrStr(value[index]);
				if ( index<(count-1) )
				{
					values = values + ", ";
				}
			}
			FormatTrace("DEBUG", stepName, 4, key, "[] Values: ", values);
		}

		static function TraceStepParamSequence(variable& stepName, variable& key, sequence& value) void
		{
			FormatTrace("DEBUG", stepName, 4,
							key, ": name = ", value.GetName(),
							", current = ", value.GetCurrentPosition(),
							", count = ",   value.GetCount(),
							", maxPos = ",  value.GetMax());
		}

		static function TraceStepParamDevice(variable& stepName, variable& key, device& value) void
		{
			FormatTrace("DEBUG", stepName, 4, key, ": ", value.GetInstrumentName());
		}
	}
	#endif	// _DEBUG_STEPPARAMS

	// --------------------------------------------------------------------------------------
	// Error Handling
	// --------------------------------------------------------------------------------------

	namespace ErrorHandling
	{
		static const variable first(1);									// guard
		static const variable abort_(first);							// error handling
		static const variable cancel(first + 1);						// error handling
		static const variable continue(first + 2);					// error handling
		static const variable continue_2(first + 3);					// error handling
		static const variable custom(first + 4);					   // error handling
		static const variable last(first + 4);							// guard
	}

   namespace DispenseType
   {
		static const variable first(1);									// guard
		static const variable regularDispense(first);				// dispense type
		static const variable preDispense(first + 1);      		// dispense type
		static const variable postDispense(first + 2);				// dispense type
		static const variable last(first + 2);							// guard
   }

   namespace CustomStepID
   {
      static const variable default(0);
   }

	// --------------------------------------------------------------------------------------
	// Traceing
	// --------------------------------------------------------------------------------------

	namespace TraceStatus
	{
		static const variable start(1);									// action status for formated trace
		static const variable complete(2);								// action status for formated trace
		static const variable error_(3);									// action status for formated trace
		static const variable progress(4);								// action status for formated trace
		static const variable completeWithError(5);					// action status for formated trace
	}

   static function TraceCustomStep(variable& stepName, variable customStepID) void
   {
      string trace(Translate("SmartStepCustomErrorHandling - %s1 with step ID %s2"));

      StrReplace(trace, "%s1", stepName);
      StrReplace(trace, "%s2", IStr(customStepID));

      FormatTrace("SYSTEM", trace, TraceStatus::progress);
   }

	// --------------------------------------------------------------------------------------
	// Functions
	// --------------------------------------------------------------------------------------

	function StepInitialize_cer(
		device& ML_STAR,
		variable initializeAlways,
		variable errorHandling,
      variable customStepID,
		variable userResponseTime)
	{
		variable rc[];

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamVariable(stepName, "initializeAlways", initializeAlways);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling", errorHandling);
			DEBUG::TraceStepParamVariable(stepName, "customStepID", customStepID);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime", userResponseTime);
		}
		#endif

		if (ErrorHandling::abort_ == errorHandling)
			rc = ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
		if (ErrorHandling::cancel == errorHandling)
			rc = ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
		if (ErrorHandling::continue == errorHandling)
			rc = ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
      if (ErrorHandling::custom == errorHandling)
      {
         TraceCustomStep("Intialize", customStepID);

         // call sub-method library function
         SMARTSTEPCUSTOMERRORHANDLING::Initialize(ML_STAR,  customStepID, initializeAlways, userResponseTime, rc);
      }

		return(rc);
	}

	function StepInitialize2(
		device& ML_STAR,
		variable initializeAlways,
		variable errorHandling,
		variable userResponseTime)
	{
		variable rc[];

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamVariable(stepName, "initializeAlways", initializeAlways);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling", errorHandling);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime", userResponseTime);
		}
		#endif

   	// 2016-08-08/ubernhard: Forward to StepInitialize_cer only
		rc = StepInitialize_cer(ML_STAR, initializeAlways, errorHandling, CustomStepID::default, userResponseTime);

		return(rc);
   }

	function StepInitialize(
		device& ML_STAR,
		variable initializeUseDefaultWaste,
		sequence& initializeWasteDestination,
		variable initializeSequenceCounting,
		variable& initializeChannelVariable,
		variable initializeChannelUse,
		variable initializeAlways,
		variable errorHandling,
		variable userResponseTime)
	{
		variable rc[];

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamVariable(stepName, "initializeUseDefaultWaste  (IGNORED!)", initializeUseDefaultWaste);
			DEBUG::TraceStepParamSequence(stepName, "initializeWasteDestination (IGNORED!)", initializeWasteDestination);
			DEBUG::TraceStepParamVariable(stepName, "initializeSequenceCounting (IGNORED!)", initializeSequenceCounting);
			DEBUG::TraceStepParamVariable(stepName, "initializeChannelVariable  (IGNORED!)", initializeChannelVariable);
			DEBUG::TraceStepParamVariable(stepName, "initializeChannelUse       (IGNORED!)", initializeChannelUse);
			DEBUG::TraceStepParamVariable(stepName, "initializeAlways",     initializeAlways);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling",        errorHandling);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime",     userResponseTime);
		}
		#endif

		// 2009-12-17/cjoerg: Forward to StepInitialize2 only
		rc = StepInitialize2(ML_STAR, initializeAlways, errorHandling, userResponseTime);

		return(rc);
	}

	function StepTipPickup_cer(
		device& ML_STAR,
		sequence& tipPickupSequence,
		variable tipPickupSequenceCounting,
		variable& tipPickupChannelVariable,
		variable tipPickupChannelUse,
		variable errorHandling,
      variable customStepID,
		variable userResponseTime)
	{
		variable rc[];

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamSequence(stepName, "tipPickupSequence", tipPickupSequence);
			DEBUG::TraceStepParamVariable(stepName, "tipPickupSequenceCounting", tipPickupSequenceCounting);
			DEBUG::TraceStepParamVariable(stepName, "tipPickupChannelVariable", tipPickupChannelVariable);
			DEBUG::TraceStepParamVariable(stepName, "tipPickupChannelUse", tipPickupChannelUse);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling", errorHandling);
         DEBUG::TraceStepParamVariable(stepName, "customStepID", customStepID);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime", userResponseTime);
		}
		#endif

		if (ErrorHandling::abort_ == errorHandling)
			rc = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
		if (ErrorHandling::cancel == errorHandling)
			rc = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
		if (ErrorHandling::continue == errorHandling)
			rc = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
		if (ErrorHandling::continue_2 == errorHandling)
			rc = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      if (ErrorHandling::custom == errorHandling)
      {
         TraceCustomStep("Tip Pick Up", customStepID);

         // call sub-method library function
         SMARTSTEPCUSTOMERRORHANDLING::TipPickUp(ML_STAR, customStepID, tipPickupSequence, tipPickupSequenceCounting,
            tipPickupChannelVariable, tipPickupChannelUse, userResponseTime, rc);
      }

		return(rc);
	}

	function StepTipPickup(
		device& ML_STAR,
		sequence& tipPickupSequence,
		variable tipPickupSequenceCounting,
		variable& tipPickupChannelVariable,
		variable tipPickupChannelUse,
		variable errorHandling,
		variable userResponseTime)
	{
		variable rc[];

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamSequence(stepName, "tipPickupSequence", tipPickupSequence);
			DEBUG::TraceStepParamVariable(stepName, "tipPickupSequenceCounting", tipPickupSequenceCounting);
			DEBUG::TraceStepParamVariable(stepName, "tipPickupChannelVariable", tipPickupChannelVariable);
			DEBUG::TraceStepParamVariable(stepName, "tipPickupChannelUse", tipPickupChannelUse);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling", errorHandling);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime", userResponseTime);
		}
		#endif

   	// 2016-08-08/ubernhard: Forward to StepTipPickup_cer only
		rc = StepTipPickup_cer(ML_STAR, tipPickupSequence, tipPickupSequenceCounting, tipPickupChannelVariable,
		                        tipPickupChannelUse, errorHandling, CustomStepID::default, userResponseTime);
		return(rc);
	}

	function StepTipPickupEx_cer(
		device& ML_STAR,
		sequence& tipPickupSequence,
		variable tipPickupSequenceCounting,
		variable& tipPickupChannelVariable,
		variable tipPickupChannelUse,
		variable errorHandling,
      variable customStepID,
		variable userResponseTime)
	{
		variable rc[];

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamSequence(stepName, "tipPickupSequence", tipPickupSequence);
			DEBUG::TraceStepParamVariable(stepName, "tipPickupSequenceCounting", tipPickupSequenceCounting);
			DEBUG::TraceStepParamVariable(stepName, "tipPickupChannelVariable", tipPickupChannelVariable);
			DEBUG::TraceStepParamVariable(stepName, "tipPickupChannelUse", tipPickupChannelUse);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling", errorHandling);
         DEBUG::TraceStepParamVariable(stepName, "customStepID", customStepID);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime", userResponseTime);
		}
		#endif

		if (ErrorHandling::abort_ == errorHandling)
			rc = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
		if (ErrorHandling::cancel == errorHandling)
			rc = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
		if (ErrorHandling::continue == errorHandling)
			rc = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
		if (ErrorHandling::continue_2 == errorHandling)
			rc = ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      if (ErrorHandling::custom == errorHandling)
      {
         TraceCustomStep("Tip Pick Up", customStepID);

         // call sub-method library function
         SMARTSTEPCUSTOMERRORHANDLING::TipPickUp(ML_STAR, customStepID, tipPickupSequence, tipPickupSequenceCounting,
            tipPickupChannelVariable, tipPickupChannelUse, userResponseTime, rc);
      }

		return(rc);
	}

	function StepTipPickupEx(
		device& ML_STAR,
		sequence& tipPickupSequence,
		variable tipPickupSequenceCounting,
		variable& tipPickupChannelVariable,
		variable tipPickupChannelUse,
		variable errorHandling,
		variable userResponseTime)
	{
		variable rc[];

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamSequence(stepName, "tipPickupSequence", tipPickupSequence);
			DEBUG::TraceStepParamVariable(stepName, "tipPickupSequenceCounting", tipPickupSequenceCounting);
			DEBUG::TraceStepParamVariable(stepName, "tipPickupChannelVariable", tipPickupChannelVariable);
			DEBUG::TraceStepParamVariable(stepName, "tipPickupChannelUse", tipPickupChannelUse);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling", errorHandling);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime", userResponseTime);
		}
		#endif

   	// 2016-08-08/ubernhard: Forward to StepTipPickupEx_cer only
		rc = StepTipPickupEx_cer(ML_STAR, tipPickupSequence, tipPickupSequenceCounting, tipPickupChannelVariable,
		                           tipPickupChannelUse, errorHandling, CustomStepID::default, userResponseTime);

		return(rc);
	}

	function StepTipEject_cer(
		device& ML_STAR,
		variable tipEjectUseDefaultWaste,
		sequence& tipEjectSequence,
		variable tipEjectSequenceCounting,
		variable& tipEjectChannelVariable,
		variable tipEjectChannelUse,
		variable errorHandling,
      variable customStepID,
		variable userResponseTime)
	{
		variable rc[];

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamVariable(stepName, "tipEjectUseDefaultWaste", tipEjectUseDefaultWaste);
			DEBUG::TraceStepParamSequence(stepName, "tipEjectSequence", tipEjectSequence);
			DEBUG::TraceStepParamVariable(stepName, "tipEjectSequenceCounting", tipEjectSequenceCounting);
			DEBUG::TraceStepParamVariable(stepName, "tipEjectChannelVariable", tipEjectChannelVariable);
			DEBUG::TraceStepParamVariable(stepName, "tipEjectChannelUse", tipEjectChannelUse);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling", errorHandling);
         DEBUG::TraceStepParamVariable(stepName, "customStepID", customStepID);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime", userResponseTime);
		}
		#endif

		if (ErrorHandling::abort_ == errorHandling)
			rc = ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
		if (ErrorHandling::cancel == errorHandling)
			rc = ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
		if (ErrorHandling::continue == errorHandling)
			rc = ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (ErrorHandling::custom == errorHandling)
      {
         TraceCustomStep("Tip Eject", customStepID);

         // call sub-method library function
         SMARTSTEPCUSTOMERRORHANDLING::TipEject(ML_STAR, customStepID, tipEjectUseDefaultWaste, tipEjectSequence,
            tipEjectSequenceCounting, tipEjectChannelVariable, tipEjectChannelUse, userResponseTime, rc);
      }

		return(rc);
	}

	function StepTipEject(
		device& ML_STAR,
		variable tipEjectUseDefaultWaste,
		sequence& tipEjectSequence,
		variable tipEjectSequenceCounting,
		variable& tipEjectChannelVariable,
		variable tipEjectChannelUse,
		variable errorHandling,
		variable userResponseTime)
	{
		variable rc[];

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamVariable(stepName, "tipEjectUseDefaultWaste", tipEjectUseDefaultWaste);
			DEBUG::TraceStepParamSequence(stepName, "tipEjectSequence", tipEjectSequence);
			DEBUG::TraceStepParamVariable(stepName, "tipEjectSequenceCounting", tipEjectSequenceCounting);
			DEBUG::TraceStepParamVariable(stepName, "tipEjectChannelVariable", tipEjectChannelVariable);
			DEBUG::TraceStepParamVariable(stepName, "tipEjectChannelUse", tipEjectChannelUse);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling", errorHandling);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime", userResponseTime);
		}
		#endif

      // 2016-08-08/ubernhard: Forward to StepTipEject_cer only
      rc = StepTipEject_cer(ML_STAR, tipEjectUseDefaultWaste, tipEjectSequence, tipEjectSequenceCounting, tipEjectChannelVariable,
                              tipEjectChannelUse, errorHandling, CustomStepID::default, userResponseTime);

		return(rc);
	}

	static function StepAspirateEx_cer(
		device& ML_STAR,
		sequence& aspirateSequence,
		variable aspirateSequenceCounting,
		variable& aspirateVolumes[],
		variable aspirateMode,
		variable aspirateCLLDSensitivity,
		variable aspiratePLLDSensitivity,
		variable aspirateSubmergeDepth,
		variable aspirateFluidHeight,
		variable aspirateMaxHeightDiff,
		variable& aspirateChannelVariable,
		variable aspirateChannelUse,
		variable aspirateLiquidFollowing,
		variable aspiratePrerinsingMixCycles,
		variable aspiratePrerinsingMixPosition,
		variable aspiratePrerinsingMixVolume,
		variable& aspirateUserDefinedLiquidClass,
		variable errorHandling,
      variable customStepID,
		variable userResponseTime)
	{
		variable rc[];
		variable size;
		variable aspirateVolume1(0);
		variable aspirateVolume2(0);
		variable aspirateVolume3(0);
		variable aspirateVolume4(0);
		variable aspirateVolume5(0);
		variable aspirateVolume6(0);
		variable aspirateVolume7(0);
		variable aspirateVolume8(0);
		variable aspirateVolume9(0);
		variable aspirateVolume10(0);
		variable aspirateVolume11(0);
		variable aspirateVolume12(0);
		variable aspirateVolume13(0);
		variable aspirateVolume14(0);
		variable aspirateVolume15(0);
		variable aspirateVolume16(0);

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamSequence(stepName, "aspirateSequence", aspirateSequence);
			DEBUG::TraceStepParamVariable(stepName, "aspirateSequenceCounting", aspirateSequenceCounting);
			DEBUG::TraceStepParamVariableArray(stepName, "aspirateVolumes", aspirateVolumes);
			DEBUG::TraceStepParamVariable(stepName, "aspirateMode", aspirateMode);
			DEBUG::TraceStepParamVariable(stepName, "aspirateCLLDSensitivity", aspirateCLLDSensitivity);
			DEBUG::TraceStepParamVariable(stepName, "aspiratePLLDSensitivity", aspiratePLLDSensitivity);
			DEBUG::TraceStepParamVariable(stepName, "aspirateSubmergeDepth", aspirateSubmergeDepth);
			DEBUG::TraceStepParamVariable(stepName, "aspirateFluidHeight", aspirateFluidHeight);
			DEBUG::TraceStepParamVariable(stepName, "aspirateMaxHeightDiff", aspirateMaxHeightDiff);
			DEBUG::TraceStepParamVariable(stepName, "aspirateChannelVariable", aspirateChannelVariable);
			DEBUG::TraceStepParamVariable(stepName, "aspirateChannelUse", aspirateChannelUse);
			DEBUG::TraceStepParamVariable(stepName, "aspirateLiquidFollowing", aspirateLiquidFollowing);
			DEBUG::TraceStepParamVariable(stepName, "aspiratePrerinsingMixCycles", aspiratePrerinsingMixCycles);
			DEBUG::TraceStepParamVariable(stepName, "aspiratePrerinsingMixPosition", aspiratePrerinsingMixPosition);
			DEBUG::TraceStepParamVariable(stepName, "aspiratePrerinsingMixVolume", aspiratePrerinsingMixVolume);
			DEBUG::TraceStepParamVariable(stepName, "aspirateUserDefinedLiquidClass", aspirateUserDefinedLiquidClass);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling", errorHandling);
         DEBUG::TraceStepParamVariable(stepName, "customStepID", customStepID);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime", userResponseTime);
		}
		#endif

		size = aspirateVolumes.GetSize();
		if (0 < size)
			aspirateVolume1 = aspirateVolumes.GetAt(0);
		if (1 < size)
			aspirateVolume2 = aspirateVolumes.GetAt(1);
		if (2 < size)
			aspirateVolume3 = aspirateVolumes.GetAt(2);
		if (3 < size)
			aspirateVolume4 = aspirateVolumes.GetAt(3);
		if (4 < size)
			aspirateVolume5 = aspirateVolumes.GetAt(4);
		if (5 < size)
			aspirateVolume6 = aspirateVolumes.GetAt(5);
		if (6 < size)
			aspirateVolume7 = aspirateVolumes.GetAt(6);
		if (7 < size)
			aspirateVolume8 = aspirateVolumes.GetAt(7);
		if (8 < size)
			aspirateVolume9 = aspirateVolumes.GetAt(8);
		if (9 < size)
			aspirateVolume10 = aspirateVolumes.GetAt(9);
		if (10 < size)
			aspirateVolume11 = aspirateVolumes.GetAt(10);
		if (11 < size)
			aspirateVolume12 = aspirateVolumes.GetAt(11);
		if (12 < size)
			aspirateVolume13 = aspirateVolumes.GetAt(12);
		if (13 < size)
			aspirateVolume14 = aspirateVolumes.GetAt(13);
		if (14 < size)
			aspirateVolume15 = aspirateVolumes.GetAt(14);
		if (15 < size)
			aspirateVolume16 = aspirateVolumes.GetAt(15);

		if (ErrorHandling::abort_ == errorHandling)
			rc = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
		if (ErrorHandling::cancel == errorHandling)
			rc = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
		if (ErrorHandling::continue == errorHandling)
			rc = ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      if (ErrorHandling::custom == errorHandling)
      {
         TraceCustomStep("Aspirate", customStepID);

         aspirateVolumes.SetSize(16);

         aspirateVolumes.SetAt( 0, aspirateVolume1);
         aspirateVolumes.SetAt( 1, aspirateVolume2);
         aspirateVolumes.SetAt( 2, aspirateVolume3);
         aspirateVolumes.SetAt( 3, aspirateVolume4);
         aspirateVolumes.SetAt( 4, aspirateVolume5);
         aspirateVolumes.SetAt( 5, aspirateVolume6);
         aspirateVolumes.SetAt( 6, aspirateVolume7);
         aspirateVolumes.SetAt( 7, aspirateVolume8);
         aspirateVolumes.SetAt( 8, aspirateVolume9);
         aspirateVolumes.SetAt( 9, aspirateVolume10);
         aspirateVolumes.SetAt(10, aspirateVolume11);
         aspirateVolumes.SetAt(11, aspirateVolume12);
         aspirateVolumes.SetAt(12, aspirateVolume13);
         aspirateVolumes.SetAt(13, aspirateVolume14);
         aspirateVolumes.SetAt(14, aspirateVolume15);
         aspirateVolumes.SetAt(15, aspirateVolume16);

         // call sub-method library function
         SMARTSTEPCUSTOMERRORHANDLING::Aspirate(ML_STAR, customStepID, aspirateSequence, aspirateSequenceCounting,
            aspirateChannelVariable, aspirateChannelUse, aspirateMode, aspirateVolumes, aspirateUserDefinedLiquidClass,
            aspirateCLLDSensitivity, aspirateSubmergeDepth, aspiratePLLDSensitivity, aspirateMaxHeightDiff, aspirateFluidHeight,
            aspirateLiquidFollowing, aspiratePrerinsingMixCycles, aspiratePrerinsingMixPosition, aspiratePrerinsingMixVolume, userResponseTime, rc);
      }

		return(rc);
	}

	static function StepAspirateEx(
		device& ML_STAR,
		sequence& aspirateSequence,
		variable aspirateSequenceCounting,
		variable& aspirateVolumes[],
		variable aspirateMode,
		variable aspirateCLLDSensitivity,
		variable aspiratePLLDSensitivity,
		variable aspirateSubmergeDepth,
		variable aspirateFluidHeight,
		variable aspirateMaxHeightDiff,
		variable& aspirateChannelVariable,
		variable aspirateChannelUse,
		variable aspirateLiquidFollowing,
		variable aspiratePrerinsingMixCycles,
		variable aspiratePrerinsingMixPosition,
		variable aspiratePrerinsingMixVolume,
		variable& aspirateUserDefinedLiquidClass,
		variable errorHandling,
		variable userResponseTime)
	{
		variable rc[];

      // 2016-08-08/ubernhard: Forward to StepAspirateEx_cer only
      rc = StepAspirateEx_cer(ML_STAR, aspirateSequence, aspirateSequenceCounting, aspirateVolumes, aspirateMode, aspirateCLLDSensitivity,
		                        aspiratePLLDSensitivity, aspirateSubmergeDepth, aspirateFluidHeight, aspirateMaxHeightDiff, aspirateChannelVariable,
		                        aspirateChannelUse, aspirateLiquidFollowing, aspiratePrerinsingMixCycles, aspiratePrerinsingMixPosition,
		                        aspiratePrerinsingMixVolume, aspirateUserDefinedLiquidClass, errorHandling, CustomStepID::default, userResponseTime);

		return(rc);
	}

   static function StepAspirate_cer(
		device& ML_STAR,
		sequence& aspirateSequence,
		variable aspirateSequenceCounting,
		variable aspirateVolume,
		variable aspirateMode,
		variable aspirateCLLDSensitivity,
		variable aspiratePLLDSensitivity,
		variable aspirateSubmergeDepth,
		variable aspirateFluidHeight,
		variable aspirateMaxHeightDiff,
		variable& aspirateChannelVariable,
		variable aspirateChannelUse,
		variable aspirateLiquidFollowing,
		variable aspiratePrerinsingMixCycles,
		variable aspiratePrerinsingMixPosition,
		variable aspiratePrerinsingMixVolume,
		variable& aspirateUserDefinedLiquidClass,
		variable errorHandling,
      variable customStepID,
		variable userResponseTime)
	{
		variable size;
		variable index;
		variable aspirateVolumes[];
		string aspirateChannelVariableCopy;

		aspirateChannelVariableCopy = aspirateChannelVariable;
		size = aspirateChannelVariableCopy.GetLength();
		for (index = 0; index < size; index++)
		{
			aspirateVolumes.AddAsLast(aspirateVolume);
		}
		return(StepAspirateEx_cer(	ML_STAR,
										aspirateSequence,
										aspirateSequenceCounting,
										aspirateVolumes,
										aspirateMode,
										aspirateCLLDSensitivity,
										aspiratePLLDSensitivity,
										aspirateSubmergeDepth,
										aspirateFluidHeight,
										aspirateMaxHeightDiff,
										aspirateChannelVariable,
										aspirateChannelUse,
										aspirateLiquidFollowing,
										aspiratePrerinsingMixCycles,
										aspiratePrerinsingMixPosition,
										aspiratePrerinsingMixVolume,
										aspirateUserDefinedLiquidClass,
										errorHandling,
                              customStepID,
										userResponseTime));
	}

	static function StepAspirate(
		device& ML_STAR,
		sequence& aspirateSequence,
		variable aspirateSequenceCounting,
		variable aspirateVolume,
		variable aspirateMode,
		variable aspirateCLLDSensitivity,
		variable aspiratePLLDSensitivity,
		variable aspirateSubmergeDepth,
		variable aspirateFluidHeight,
		variable aspirateMaxHeightDiff,
		variable& aspirateChannelVariable,
		variable aspirateChannelUse,
		variable aspirateLiquidFollowing,
		variable aspiratePrerinsingMixCycles,
		variable aspiratePrerinsingMixPosition,
		variable aspiratePrerinsingMixVolume,
		variable& aspirateUserDefinedLiquidClass,
		variable errorHandling,
		variable userResponseTime)
	{
		variable size;
		variable index;
		variable aspirateVolumes[];
		string aspirateChannelVariableCopy;

		aspirateChannelVariableCopy = aspirateChannelVariable;
		size = aspirateChannelVariableCopy.GetLength();
		for (index = 0; index < size; index++)
		{
			aspirateVolumes.AddAsLast(aspirateVolume);
		}
		return(StepAspirateEx_cer(	ML_STAR,
										aspirateSequence,
										aspirateSequenceCounting,
										aspirateVolumes,
										aspirateMode,
										aspirateCLLDSensitivity,
										aspiratePLLDSensitivity,
										aspirateSubmergeDepth,
										aspirateFluidHeight,
										aspirateMaxHeightDiff,
										aspirateChannelVariable,
										aspirateChannelUse,
										aspirateLiquidFollowing,
										aspiratePrerinsingMixCycles,
										aspiratePrerinsingMixPosition,
										aspiratePrerinsingMixVolume,
										aspirateUserDefinedLiquidClass,
										errorHandling,
                              CustomStepID::default,
										userResponseTime));
	}

	function StepDispenseEx_cer(
		device& ML_STAR,
		sequence& dispenseSequence,
		variable dispenseSequenceCounting,
		variable& dispenseVolumes[],
		variable dispenseMode,
		variable dispenseCLLDSensitivity,
		variable dispenseSubmergeDepth,
		variable dispenseFluidHeight,
		variable& dispenseChannelVariable,
		variable dispenseChannelUse,
		variable dispenseLiquidFollowing,
		variable dispensePrerinsingMixCycles,
		variable dispensePrerinsingMixPosition,
		variable dispensePrerinsingMixVolume,
		variable& dispenseUserDefinedLiquidClass,
		variable errorHandling,
      variable customStepID,
      variable dispenseType,
		variable userResponseTime)
	{
		variable rc[];
		variable size;
		variable dispenseVolume1(0);
		variable dispenseVolume2(0);
		variable dispenseVolume3(0);
		variable dispenseVolume4(0);
		variable dispenseVolume5(0);
		variable dispenseVolume6(0);
		variable dispenseVolume7(0);
		variable dispenseVolume8(0);
		variable dispenseVolume9(0);
		variable dispenseVolume10(0);
		variable dispenseVolume11(0);
		variable dispenseVolume12(0);
		variable dispenseVolume13(0);
		variable dispenseVolume14(0);
		variable dispenseVolume15(0);
		variable dispenseVolume16(0);

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamSequence(stepName, "dispenseSequence", dispenseSequence);
			DEBUG::TraceStepParamVariable(stepName, "dispenseSequenceCounting", dispenseSequenceCounting);
			DEBUG::TraceStepParamVariableArray(stepName, "dispenseVolumes", dispenseVolumes);
			DEBUG::TraceStepParamVariable(stepName, "dispenseMode", dispenseMode);
			DEBUG::TraceStepParamVariable(stepName, "dispenseCLLDSensitivity", dispenseCLLDSensitivity);
			DEBUG::TraceStepParamVariable(stepName, "dispenseSubmergeDepth", dispenseSubmergeDepth);
			DEBUG::TraceStepParamVariable(stepName, "dispenseFluidHeight", dispenseFluidHeight);
			DEBUG::TraceStepParamVariable(stepName, "dispenseChannelVariable", dispenseChannelVariable);
			DEBUG::TraceStepParamVariable(stepName, "dispenseChannelUse", dispenseChannelUse);
			DEBUG::TraceStepParamVariable(stepName, "dispenseLiquidFollowing", dispenseLiquidFollowing);
			DEBUG::TraceStepParamVariable(stepName, "dispensePrerinsingMixCycles", dispensePrerinsingMixCycles);
			DEBUG::TraceStepParamVariable(stepName, "dispensePrerinsingMixPosition", dispensePrerinsingMixPosition);
			DEBUG::TraceStepParamVariable(stepName, "dispensePrerinsingMixVolume", dispensePrerinsingMixVolume);
			DEBUG::TraceStepParamVariable(stepName, "dispenseUserDefinedLiquidClass", dispenseUserDefinedLiquidClass);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling", errorHandling);
         DEBUG::TraceStepParamVariable(stepName, "customStepID", customStepID);
         DEBUG::TraceStepParamVariable(stepName, "dispenseType", dispenseType);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime", userResponseTime);
		}
		#endif

		size = dispenseVolumes.GetSize();
		if (0 < size)
			dispenseVolume1 = dispenseVolumes.GetAt(0);
		if (1 < size)
			dispenseVolume2 = dispenseVolumes.GetAt(1);
		if (2 < size)
			dispenseVolume3 = dispenseVolumes.GetAt(2);
		if (3 < size)
			dispenseVolume4 = dispenseVolumes.GetAt(3);
		if (4 < size)
			dispenseVolume5 = dispenseVolumes.GetAt(4);
		if (5 < size)
			dispenseVolume6 = dispenseVolumes.GetAt(5);
		if (6 < size)
			dispenseVolume7 = dispenseVolumes.GetAt(6);
		if (7 < size)
			dispenseVolume8 = dispenseVolumes.GetAt(7);
		if (8 < size)
			dispenseVolume9 = dispenseVolumes.GetAt(8);
		if (9 < size)
			dispenseVolume10 = dispenseVolumes.GetAt(9);
		if (10 < size)
			dispenseVolume11 = dispenseVolumes.GetAt(10);
		if (11 < size)
			dispenseVolume12 = dispenseVolumes.GetAt(11);
		if (12 < size)
			dispenseVolume13 = dispenseVolumes.GetAt(12);
		if (13 < size)
			dispenseVolume14 = dispenseVolumes.GetAt(13);
		if (14 < size)
			dispenseVolume15 = dispenseVolumes.GetAt(14);
		if (15 < size)
			dispenseVolume16 = dispenseVolumes.GetAt(15);

		if (ErrorHandling::abort_ == errorHandling)
			rc = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
		if (ErrorHandling::cancel == errorHandling)
			rc = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
		if (ErrorHandling::continue == errorHandling)
			rc = ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      if (ErrorHandling::custom == errorHandling)
      {
         dispenseVolumes.SetSize(16);

         dispenseVolumes.SetAt( 0, dispenseVolume1);
         dispenseVolumes.SetAt( 1, dispenseVolume2);
         dispenseVolumes.SetAt( 2, dispenseVolume3);
         dispenseVolumes.SetAt( 3, dispenseVolume4);
         dispenseVolumes.SetAt( 4, dispenseVolume5);
         dispenseVolumes.SetAt( 5, dispenseVolume6);
         dispenseVolumes.SetAt( 6, dispenseVolume7);
         dispenseVolumes.SetAt( 7, dispenseVolume8);
         dispenseVolumes.SetAt( 8, dispenseVolume9);
         dispenseVolumes.SetAt( 9, dispenseVolume10);
         dispenseVolumes.SetAt(10, dispenseVolume11);
         dispenseVolumes.SetAt(11, dispenseVolume12);
         dispenseVolumes.SetAt(12, dispenseVolume13);
         dispenseVolumes.SetAt(13, dispenseVolume14);
         dispenseVolumes.SetAt(14, dispenseVolume15);
         dispenseVolumes.SetAt(15, dispenseVolume16);

         if(DispenseType::regularDispense == dispenseType)
         {
            TraceCustomStep("Dispense", customStepID);

            // call sub-method library function
            SMARTSTEPCUSTOMERRORHANDLING::Dispense(ML_STAR, customStepID, dispenseSequence, dispenseSequenceCounting,
               dispenseChannelVariable, dispenseChannelUse, dispenseMode, dispenseVolumes, dispenseUserDefinedLiquidClass,
               dispenseCLLDSensitivity, dispenseSubmergeDepth, dispenseFluidHeight, dispenseLiquidFollowing,
               dispensePrerinsingMixCycles, dispensePrerinsingMixPosition, dispensePrerinsingMixVolume, userResponseTime, rc);
         }
         if(DispenseType::preDispense == dispenseType)
         {
            TraceCustomStep("Pre-Dispense", customStepID);

            // call sub-method library function
            SMARTSTEPCUSTOMERRORHANDLING::PreDispense(ML_STAR, customStepID, dispenseSequence, dispenseSequenceCounting,
               dispenseChannelVariable, dispenseChannelUse, dispenseMode, dispenseVolumes, dispenseUserDefinedLiquidClass,
               dispenseCLLDSensitivity, dispenseSubmergeDepth, dispenseFluidHeight, dispenseLiquidFollowing,
               dispensePrerinsingMixCycles, dispensePrerinsingMixPosition, dispensePrerinsingMixVolume, userResponseTime, rc);
         }
         if(DispenseType::postDispense == dispenseType)
         {
            TraceCustomStep("Post-Dispense", customStepID);

            // call sub-method library function
            SMARTSTEPCUSTOMERRORHANDLING::PostDispense(ML_STAR, customStepID, dispenseSequence, dispenseSequenceCounting,
               dispenseChannelVariable, dispenseChannelUse, dispenseMode, dispenseVolumes, dispenseUserDefinedLiquidClass,
               dispenseCLLDSensitivity, dispenseSubmergeDepth, dispenseFluidHeight, dispenseLiquidFollowing,
               dispensePrerinsingMixCycles, dispensePrerinsingMixPosition, dispensePrerinsingMixVolume, userResponseTime, rc);
         }
      }

      return(rc);
	}

	function StepDispenseEx(
		device& ML_STAR,
		sequence& dispenseSequence,
		variable dispenseSequenceCounting,
		variable& dispenseVolumes[],
		variable dispenseMode,
		variable dispenseCLLDSensitivity,
		variable dispenseSubmergeDepth,
		variable dispenseFluidHeight,
		variable& dispenseChannelVariable,
		variable dispenseChannelUse,
		variable dispenseLiquidFollowing,
		variable dispensePrerinsingMixCycles,
		variable dispensePrerinsingMixPosition,
		variable dispensePrerinsingMixVolume,
		variable& dispenseUserDefinedLiquidClass,
		variable errorHandling,
		variable userResponseTime)
	{
		variable rc[];

      // 2016-08-08/ubernhard: Forward to StepDispenseEx_cer only
		return(StepDispenseEx_cer(	ML_STAR,
										dispenseSequence,
										dispenseSequenceCounting,
										dispenseVolumes,
										dispenseMode,
										dispenseCLLDSensitivity,
										dispenseSubmergeDepth,
										dispenseFluidHeight,
										dispenseChannelVariable,
										dispenseChannelUse,
										dispenseLiquidFollowing,
										dispensePrerinsingMixCycles,
										dispensePrerinsingMixPosition,
										dispensePrerinsingMixVolume,
										dispenseUserDefinedLiquidClass,
										errorHandling,
                              CustomStepID::default,
                              DispenseType::regularDispense,
										userResponseTime));

      return(rc);
	}

   function StepDispense_cer(
		device& ML_STAR,
		sequence& dispenseSequence,
		variable dispenseSequenceCounting,
		variable dispenseVolume,
		variable dispenseMode,
		variable dispenseCLLDSensitivity,
		variable dispenseSubmergeDepth,
		variable dispenseFluidHeight,
		variable& dispenseChannelVariable,
		variable dispenseChannelUse,
		variable dispenseLiquidFollowing,
		variable dispensePrerinsingMixCycles,
		variable dispensePrerinsingMixPosition,
		variable dispensePrerinsingMixVolume,
		variable& dispenseUserDefinedLiquidClass,
		variable errorHandling,
      variable customStepID,
      variable dispenseType,
		variable userResponseTime)
	{
		variable size;
		variable index;
		variable dispenseVolumes[];
		string dispenseChannelVariableCopy;

		dispenseChannelVariableCopy = dispenseChannelVariable;
		size = dispenseChannelVariableCopy.GetLength();
		for (index = 0; index < size; index++)
		{
			dispenseVolumes.AddAsLast(dispenseVolume);
		}
		return(StepDispenseEx_cer(	ML_STAR,
										dispenseSequence,
										dispenseSequenceCounting,
										dispenseVolumes,
										dispenseMode,
										dispenseCLLDSensitivity,
										dispenseSubmergeDepth,
										dispenseFluidHeight,
										dispenseChannelVariable,
										dispenseChannelUse,
										dispenseLiquidFollowing,
										dispensePrerinsingMixCycles,
										dispensePrerinsingMixPosition,
										dispensePrerinsingMixVolume,
										dispenseUserDefinedLiquidClass,
										errorHandling,
                              customStepID,
                              dispenseType,
										userResponseTime));
	}

	function StepDispense(
		device& ML_STAR,
		sequence& dispenseSequence,
		variable dispenseSequenceCounting,
		variable dispenseVolume,
		variable dispenseMode,
		variable dispenseCLLDSensitivity,
		variable dispenseSubmergeDepth,
		variable dispenseFluidHeight,
		variable& dispenseChannelVariable,
		variable dispenseChannelUse,
		variable dispenseLiquidFollowing,
		variable dispensePrerinsingMixCycles,
		variable dispensePrerinsingMixPosition,
		variable dispensePrerinsingMixVolume,
		variable& dispenseUserDefinedLiquidClass,
		variable errorHandling,
		variable userResponseTime)
	{
		variable size;
		variable index;
		variable dispenseVolumes[];
		string dispenseChannelVariableCopy;

		dispenseChannelVariableCopy = dispenseChannelVariable;
		size = dispenseChannelVariableCopy.GetLength();
		for (index = 0; index < size; index++)
		{
			dispenseVolumes.AddAsLast(dispenseVolume);
		}
		return(StepDispenseEx_cer(	ML_STAR,
										dispenseSequence,
										dispenseSequenceCounting,
										dispenseVolumes,
										dispenseMode,
										dispenseCLLDSensitivity,
										dispenseSubmergeDepth,
										dispenseFluidHeight,
										dispenseChannelVariable,
										dispenseChannelUse,
										dispenseLiquidFollowing,
										dispensePrerinsingMixCycles,
										dispensePrerinsingMixPosition,
										dispensePrerinsingMixVolume,
										dispenseUserDefinedLiquidClass,
										errorHandling,
                              CustomStepID::default,
                              DispenseType::regularDispense,
										userResponseTime));
	}

	function StepLoadCarrierEx_cer(
		device& ML_STAR,
		variable& loadCarrier,
		variable loadCarrierBarcodeFileName,
		variable barcodeReadPositions,
		variable recoveryOptionContinue,
		variable recoveryOptionExclude,
		variable recoveryOptionDefault,
		variable errorHandling,
      variable customStepID,
		variable userResponseTime)
	{
		variable rc[];

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamVariable(stepName, "loadCarrier", loadCarrier);
			DEBUG::TraceStepParamVariable(stepName, "loadCarrierBarcodeFileName", loadCarrierBarcodeFileName);
			DEBUG::TraceStepParamVariable(stepName, "barcodeReadPositions", barcodeReadPositions);
			DEBUG::TraceStepParamVariable(stepName, "recoveryOptionContinue", recoveryOptionContinue);
			DEBUG::TraceStepParamVariable(stepName, "recoveryOptionExclude", recoveryOptionExclude);
			DEBUG::TraceStepParamVariable(stepName, "recoveryOptionDefault", recoveryOptionDefault);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling", errorHandling);
         DEBUG::TraceStepParamVariable(stepName, "customStepID", customStepID);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime", userResponseTime);
		}
		#endif

		if (ErrorHandling::abort_ == errorHandling)
			rc = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
		if (ErrorHandling::cancel == errorHandling)
			rc = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
		if (ErrorHandling::continue == errorHandling)
		{
			if (1 == recoveryOptionContinue && 	// visible
				 1 == recoveryOptionExclude &&  	// visible
				 1 == recoveryOptionDefault)		// =exclude
			{
				rc = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
				return(rc);
			}
			if (1 == recoveryOptionContinue && 	// visible
				 1 == recoveryOptionExclude && 	// visible
				 0 == recoveryOptionDefault)		// =continue
			{
				rc = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
				return(rc);
			}
			if (1 == recoveryOptionContinue &&  // visible
				 0 == recoveryOptionExclude &&  	// hidden
				 0 == recoveryOptionDefault)		// =continue
			{
				rc = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
				return(rc);
			}
			if (0 == recoveryOptionContinue &&  // hidden
				 1 == recoveryOptionExclude &&  	// visible
				 1 == recoveryOptionDefault)		// =exclude
			{
				rc = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
				return(rc);
			}
		}
      if (ErrorHandling::custom == errorHandling)
      {
         TraceCustomStep("Load Carrier", customStepID);

         // call sub-method library function
         SMARTSTEPCUSTOMERRORHANDLING::LoadCarrier(ML_STAR, customStepID, loadCarrier, loadCarrierBarcodeFileName, barcodeReadPositions, userResponseTime, rc);
      }

		return(rc);
	}

	function StepLoadCarrierEx(
		device& ML_STAR,
		variable& loadCarrier,
		variable loadCarrierBarcodeFileName,
		variable barcodeReadPositions,
		variable recoveryOptionContinue,
		variable recoveryOptionExclude,
		variable recoveryOptionDefault,
		variable errorHandling,
		variable userResponseTime)
	{
		variable rc[];

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamVariable(stepName, "loadCarrier", loadCarrier);
			DEBUG::TraceStepParamVariable(stepName, "loadCarrierBarcodeFileName", loadCarrierBarcodeFileName);
			DEBUG::TraceStepParamVariable(stepName, "barcodeReadPositions", barcodeReadPositions);
			DEBUG::TraceStepParamVariable(stepName, "recoveryOptionContinue", recoveryOptionContinue);
			DEBUG::TraceStepParamVariable(stepName, "recoveryOptionExclude", recoveryOptionExclude);
			DEBUG::TraceStepParamVariable(stepName, "recoveryOptionDefault", recoveryOptionDefault);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling", errorHandling);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime", userResponseTime);
		}
		#endif

      // 2016-08-08/ubernhard: Forward to StepLoadCarrierEx_cer only
      rc = StepLoadCarrierEx_cer(ML_STAR, loadCarrier, loadCarrierBarcodeFileName, barcodeReadPositions, recoveryOptionContinue,
		                           recoveryOptionExclude, recoveryOptionDefault, errorHandling, CustomStepID::default, userResponseTime);

		return(rc);
	}

	// Load Carrier step extension for special use with Load And Match
	function StepLoadCarrierEx2_cer(
		device& ML_STAR,
		variable& loadCarrier,
		variable loadCarrierBarcodeFileName,
		variable barcodeReadPositions,
		variable recoveryOptionContinue,
		variable recoveryOptionExclude,
		variable recoveryOptionDefault,
		variable errorHandling,
      variable customStepID,
		variable userResponseTime)
	{
		variable rc[];

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamVariable(stepName, "loadCarrier", loadCarrier);
			DEBUG::TraceStepParamVariable(stepName, "loadCarrierBarcodeFileName", loadCarrierBarcodeFileName);
			DEBUG::TraceStepParamVariable(stepName, "barcodeReadPositions", barcodeReadPositions);
			DEBUG::TraceStepParamVariable(stepName, "recoveryOptionContinue", recoveryOptionContinue);
			DEBUG::TraceStepParamVariable(stepName, "recoveryOptionExclude", recoveryOptionExclude);
			DEBUG::TraceStepParamVariable(stepName, "recoveryOptionDefault", recoveryOptionDefault);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling", errorHandling);
         DEBUG::TraceStepParamVariable(stepName, "customStepID", customStepID);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime", userResponseTime);
		}
		#endif

		if (ErrorHandling::abort_ == errorHandling)
			rc = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
		if (ErrorHandling::cancel == errorHandling)
			rc = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
		if (ErrorHandling::continue == errorHandling)
		{
			// Special error settings in StepLoadCarrierEx2
			// Error "No Labware Error" is recovered with 'exclude' immediately (timeout=0) and 'continue' is hidden.

			if (1 == recoveryOptionContinue && 	// visible
				 1 == recoveryOptionExclude && 	// visible
				 1 == recoveryOptionDefault)		// =exclude
			{
				rc = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
				return(rc);
			}
			if (1 == recoveryOptionContinue && 	// visible
				 1 == recoveryOptionExclude && 	// visible
				 0 == recoveryOptionDefault)		// =continue
			{
				rc = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
				return(rc);
			}
			if (1 == recoveryOptionContinue && 	// visible
				 0 == recoveryOptionExclude && 	// hidden
				 0 == recoveryOptionDefault)		// =continue
			{
				rc = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
				return(rc);
			}
			if (0 == recoveryOptionContinue && 	// hidden
				 1 == recoveryOptionExclude && 	// visible
				 1 == recoveryOptionDefault)		// =exclude
			{
				rc = ML_STAR._54114402_7FA2_11D3_AD85_0004ACB1DCB2("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"); // LoadCarrier
				return(rc);
			}
		}
      if (ErrorHandling::custom == errorHandling)
      {
         TraceCustomStep("Load Carrier", customStepID);

         // call sub-method library function
         SMARTSTEPCUSTOMERRORHANDLING::LoadCarrier(ML_STAR, customStepID, loadCarrier, loadCarrierBarcodeFileName, barcodeReadPositions, userResponseTime, rc);
      }

		return(rc);
	}

	// Load Carrier step extension for special use with Load And Match
	function StepLoadCarrierEx2(
		device& ML_STAR,
		variable& loadCarrier,
		variable loadCarrierBarcodeFileName,
		variable barcodeReadPositions,
		variable recoveryOptionContinue,
		variable recoveryOptionExclude,
		variable recoveryOptionDefault,
		variable errorHandling,
		variable userResponseTime)
	{
		variable rc[];

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamVariable(stepName, "loadCarrier", loadCarrier);
			DEBUG::TraceStepParamVariable(stepName, "loadCarrierBarcodeFileName", loadCarrierBarcodeFileName);
			DEBUG::TraceStepParamVariable(stepName, "barcodeReadPositions", barcodeReadPositions);
			DEBUG::TraceStepParamVariable(stepName, "recoveryOptionContinue", recoveryOptionContinue);
			DEBUG::TraceStepParamVariable(stepName, "recoveryOptionExclude", recoveryOptionExclude);
			DEBUG::TraceStepParamVariable(stepName, "recoveryOptionDefault", recoveryOptionDefault);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling", errorHandling);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime", userResponseTime);
		}
		#endif

      // 2016-08-08/ubernhard: Forward to StepLoadCarrierEx2_cer only
      rc = 	StepLoadCarrierEx2_cer(ML_STAR, loadCarrier, loadCarrierBarcodeFileName, barcodeReadPositions, recoveryOptionContinue,
		                              recoveryOptionExclude, recoveryOptionDefault, errorHandling, CustomStepID::default, userResponseTime);

		return(rc);
	}

	function StepLoadCarrier(
		device& ML_STAR,
		variable& loadCarrier,
		variable loadCarrierBarcodeFileName,
		variable errorHandling,
		variable userResponseTime)
	{
		variable barcodeReadPositions("?");						// load carrier barcode read positions
		variable recoveryOptionContinue(hslTrue);				// visibility of recovery option Continue (0 = invisible, 1 = visible)
		variable recoveryOptionExclude(hslTrue);				// visibility of recovery option Continue (0 = invisible, 1 = visible)
		variable recoveryOptionDefault(0);						// default of recovery options Continue and Exclude (0 = Continue, 1 = Exclude)

		return(StepLoadCarrierEx(	ML_STAR,
											loadCarrier,
											loadCarrierBarcodeFileName,
											barcodeReadPositions,
											recoveryOptionContinue,
											recoveryOptionExclude,
											recoveryOptionDefault,
											errorHandling,
											userResponseTime));
	}

	function StepUnloadCarrier_cer(
		device& ML_STAR,
		variable& unloadCarrier,
		variable errorHandling,
      variable customStepID,
		variable userResponseTime)
	{
		variable rc[];

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamVariable(stepName, "unloadCarrier", unloadCarrier);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling", errorHandling);
         DEBUG::TraceStepParamVariable(stepName, "customStepID", customStepID);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime", userResponseTime);
		}
		#endif

		if (ErrorHandling::abort_ == errorHandling)
			rc = ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
		if (ErrorHandling::cancel == errorHandling)
			rc = ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
		if (ErrorHandling::continue == errorHandling)
			rc = ML_STAR._54114400_7FA2_11D3_AD85_0004ACB1DCB2("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"); // UnloadCarrier
      if (ErrorHandling::custom == errorHandling)
      {
         TraceCustomStep("Unload Carrier", customStepID);

         // call sub-method library function
         SMARTSTEPCUSTOMERRORHANDLING::UnloadCarrier(ML_STAR, customStepID, unloadCarrier, userResponseTime, rc);
      }

		return(rc);
	}

	function StepUnloadCarrier(
		device& ML_STAR,
		variable& unloadCarrier,
		variable errorHandling,
		variable userResponseTime)
	{
		variable rc[];

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamVariable(stepName, "unloadCarrier", unloadCarrier);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling", errorHandling);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime", userResponseTime);
		}
		#endif

      // 2016-08-08/ubernhard: Forward to StepUnloadCarrier_cer only
      rc = StepUnloadCarrier_cer(ML_STAR, unloadCarrier, errorHandling, CustomStepID::default, userResponseTime);

		return(rc);
	}

	function StepCalibrate1536Plate_cer(
		device& ML_STAR,
		variable& calibrateCarrier,
		variable calibrateCarrierChannel,
		variable errorHandling,
      variable customStepID,
		variable userResponseTime)
	{
		variable rc[];

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamVariable(stepName, "calibrateCarrier", calibrateCarrier);
			DEBUG::TraceStepParamVariable(stepName, "calibrateCarrierChannel", calibrateCarrierChannel);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling", errorHandling);
         DEBUG::TraceStepParamVariable(stepName, "customStepID", customStepID);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime", userResponseTime);
		}
		#endif

		if (ErrorHandling::abort_ == errorHandling)
			rc = ML_STAR._81DA4251_3BA9_11d4_AE21_0004ACB1DCB2("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"); // Calibrate1536Plate
		if (ErrorHandling::cancel == errorHandling)
			rc = ML_STAR._81DA4251_3BA9_11d4_AE21_0004ACB1DCB2("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"); // Calibrate1536Plate
		if (ErrorHandling::continue == errorHandling)
			rc = ML_STAR._81DA4251_3BA9_11d4_AE21_0004ACB1DCB2("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"); // Calibrate1536Plate
      if (ErrorHandling::custom == errorHandling)
      {
         TraceCustomStep("Calibrate Carrier", customStepID);

         // call sub-method library function
         SMARTSTEPCUSTOMERRORHANDLING::Calibrate1536Plate(ML_STAR, customStepID, calibrateCarrier, calibrateCarrierChannel, userResponseTime, rc);
      }

		return(rc);
	}

	function StepCalibrate1536Plate(
		device& ML_STAR,
		variable& calibrateCarrier,
		variable calibrateCarrierChannel,
		variable errorHandling,
		variable userResponseTime)
	{
		variable rc[];

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamVariable(stepName, "calibrateCarrier", calibrateCarrier);
			DEBUG::TraceStepParamVariable(stepName, "calibrateCarrierChannel", calibrateCarrierChannel);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling", errorHandling);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime", userResponseTime);
		}
		#endif

      // 2016-08-08/ubernhard: Forward to StepCalibrate1536Plate_cer only
      rc =  StepCalibrate1536Plate_cer(ML_STAR, calibrateCarrier, calibrateCarrierChannel, errorHandling,
                                       CustomStepID::default, userResponseTime);

		return(rc);
	}

	function StepWaitNeedleWashed_cer(
		device& ML_STAR,
		variable& washStation,
		variable errorHandling,
      variable customStepID,
		variable userResponseTime)
	{
		variable rc[];

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamVariable(stepName, "washStation", washStation);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling", errorHandling);
         DEBUG::TraceStepParamVariable(stepName, "customStepID", customStepID);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime", userResponseTime);
		}
		#endif

		if (ErrorHandling::abort_ == errorHandling)
			rc = ML_STAR._BCAAD4F5_0BD2_4d9c_8243_70DD893496CB("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"); // WaitNeedleWashed
		if (ErrorHandling::cancel == errorHandling)
			rc = ML_STAR._BCAAD4F5_0BD2_4d9c_8243_70DD893496CB("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"); // WaitNeedleWashed
		if (ErrorHandling::continue == errorHandling)
			rc = ML_STAR._BCAAD4F5_0BD2_4d9c_8243_70DD893496CB("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"); // WaitNeedleWashed
      if (ErrorHandling::custom == errorHandling)
      {
         TraceCustomStep("Wait Needle Wash", customStepID);

         // call sub-method library function
         SMARTSTEPCUSTOMERRORHANDLING::WaitNeedleWash(ML_STAR, customStepID, washStation, userResponseTime, rc);
      }

		return(rc);
	}

	function StepWaitNeedleWashed(
		device& ML_STAR,
		variable& washStation,
		variable errorHandling,
		variable userResponseTime)
	{
		variable rc[];

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamVariable(stepName, "washStation", washStation);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling", errorHandling);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime", userResponseTime);
		}
		#endif

      // 2016-08-08/ubernhard: Forward to StepWaitNeedleWashed_cer only
      rc =  StepWaitNeedleWashed_cer(ML_STAR, washStation, errorHandling, CustomStepID::default, userResponseTime);

		return(rc);
	}

	function StepStartNeedleWash_cer(
		device& ML_STAR,
		variable& washStation,
		variable rinseTime1,
		variable soakTime1,
		variable flowRate1,
		variable rinseTime2,
		variable soakTime2,
		variable flowRate2,
		variable drainingTime,
		variable startWashLiquid,
		variable errorHandling,
      variable customStepID,
		variable userResponseTime)
	{
		variable rc[];

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamVariable(stepName, "washStation", washStation);
			DEBUG::TraceStepParamVariable(stepName, "rinseTime1", rinseTime1);
			DEBUG::TraceStepParamVariable(stepName, "soakTime1", soakTime1);
			DEBUG::TraceStepParamVariable(stepName, "flowRate1", flowRate1);
			DEBUG::TraceStepParamVariable(stepName, "rinseTime2", rinseTime2);
			DEBUG::TraceStepParamVariable(stepName, "soakTime2", soakTime2);
			DEBUG::TraceStepParamVariable(stepName, "flowRate2", flowRate2);
			DEBUG::TraceStepParamVariable(stepName, "drainingTime", drainingTime);
			DEBUG::TraceStepParamVariable(stepName, "startWashLiquid", startWashLiquid);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling", errorHandling);
         DEBUG::TraceStepParamVariable(stepName, "customStepID", customStepID);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime", userResponseTime);
		}
		#endif

		if (ErrorHandling::abort_ == errorHandling)
			rc = ML_STAR._C3B1B9A6_5B2F_4069_B9CB_68A675EC480D("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"); // StartNeedleWash
		if (ErrorHandling::cancel == errorHandling)
			rc = ML_STAR._C3B1B9A6_5B2F_4069_B9CB_68A675EC480D("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"); // StartNeedleWash
		if (ErrorHandling::continue == errorHandling)
			rc = ML_STAR._C3B1B9A6_5B2F_4069_B9CB_68A675EC480D("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"); // StartNeedleWash
      if (ErrorHandling::custom == errorHandling)
      {
         TraceCustomStep("Start Needle Wash", customStepID);

         // call sub-method library function
         SMARTSTEPCUSTOMERRORHANDLING::StartNeedleWash(ML_STAR, customStepID, washStation, rinseTime1, soakTime1, flowRate1,
            rinseTime2, soakTime2, flowRate2, drainingTime, startWashLiquid, userResponseTime, rc);
      }

		return(rc);
	}

	function StepStartNeedleWash(
		device& ML_STAR,
		variable& washStation,
		variable rinseTime1,
		variable soakTime1,
		variable flowRate1,
		variable rinseTime2,
		variable soakTime2,
		variable flowRate2,
		variable drainingTime,
		variable startWashLiquid,
		variable errorHandling,
		variable userResponseTime)
	{
		variable rc[];

		#ifdef _DEBUG_STEPPARAMS
		{
			variable stepName;
			stepName = GetFunctionName();
			DEBUG::TraceStepParamDevice(stepName, "device", ML_STAR);
			DEBUG::TraceStepParamVariable(stepName, "washStation", washStation);
			DEBUG::TraceStepParamVariable(stepName, "rinseTime1", rinseTime1);
			DEBUG::TraceStepParamVariable(stepName, "soakTime1", soakTime1);
			DEBUG::TraceStepParamVariable(stepName, "flowRate1", flowRate1);
			DEBUG::TraceStepParamVariable(stepName, "rinseTime2", rinseTime2);
			DEBUG::TraceStepParamVariable(stepName, "soakTime2", soakTime2);
			DEBUG::TraceStepParamVariable(stepName, "flowRate2", flowRate2);
			DEBUG::TraceStepParamVariable(stepName, "drainingTime", drainingTime);
			DEBUG::TraceStepParamVariable(stepName, "startWashLiquid", startWashLiquid);
			DEBUG::TraceStepParamVariable(stepName, "errorHandling", errorHandling);
			DEBUG::TraceStepParamVariable(stepName, "userResponseTime", userResponseTime);
		}
		#endif

      // 2016-08-08/ubernhard: Forward to StepStartNeedleWash_cer only
      rc =  StepStartNeedleWash_cer(ML_STAR, washStation, rinseTime1, soakTime1, flowRate1,
   	                                 rinseTime2, soakTime2, flowRate2, drainingTime, startWashLiquid,
		                                 errorHandling, CustomStepID::default, userResponseTime);

		return(rc);
	}

	function StepFirmwareCommand(
		device& ML_STAR,
		variable& commandString,
		variable& parameterString,
		variable& returnValues[]) void
	{
		returnValues.SetSize(0);
		returnValues = ML_STAR._1FB5DA01_3ACB_11d4_AE1F_0004ACB1DCB2("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"); // FirmwareCommand
	}
}
#endif
